/gate/source/addSource xraygun
/gate/source/verbose 0
/gate/source/xraygun/setActivity 1000000000. becquerel
/gate/source/xraygun/gps/verbose 0
/gate/source/xraygun/gps/particle gamma
/gate/source/xraygun/gps/energytype Arb
/gate/source/xraygun/gps/histname arb
/gate/source/xraygun/gps/emin 10 keV
/gate/source/xraygun/gps/emax 300 keV
/gate/source/xraygun/gps/histpoint 0.010 0
/gate/source/xraygun/gps/histpoint 0.011 0
/gate/source/xraygun/gps/histpoint 0.012 0
/gate/source/xraygun/gps/histpoint 0.013 0
/gate/source/xraygun/gps/histpoint 0.014 0
/gate/source/xraygun/gps/histpoint 0.015 0
/gate/source/xraygun/gps/histpoint 0.016 0
/gate/source/xraygun/gps/histpoint 0.017 0
/gate/source/xraygun/gps/histpoint 0.018 0
/gate/source/xraygun/gps/histpoint 0.019 0
/gate/source/xraygun/gps/histpoint 0.020 0
/gate/source/xraygun/gps/histpoint 0.021 0
/gate/source/xraygun/gps/histpoint 0.022 0
/gate/source/xraygun/gps/histpoint 0.023 0
/gate/source/xraygun/gps/histpoint 0.024 0
/gate/source/xraygun/gps/histpoint 0.025 0
/gate/source/xraygun/gps/histpoint 0.026 0
/gate/source/xraygun/gps/histpoint 0.027 0
/gate/source/xraygun/gps/histpoint 0.028 1
/gate/source/xraygun/gps/histpoint 0.029 2
/gate/source/xraygun/gps/histpoint 0.030 0
/gate/source/xraygun/gps/histpoint 0.031 0
/gate/source/xraygun/gps/histpoint 0.032 0
/gate/source/xraygun/gps/histpoint 0.033 0
/gate/source/xraygun/gps/histpoint 0.034 0
/gate/source/xraygun/gps/histpoint 0.035 0
/gate/source/xraygun/gps/histpoint 0.036 0
/gate/source/xraygun/gps/histpoint 0.037 0
/gate/source/xraygun/gps/histpoint 0.038 0
/gate/source/xraygun/gps/histpoint 0.039 0
/gate/source/xraygun/gps/histpoint 0.040 0
/gate/source/xraygun/gps/histpoint 0.041 0
/gate/source/xraygun/gps/histpoint 0.042 0
/gate/source/xraygun/gps/histpoint 0.043 0
/gate/source/xraygun/gps/histpoint 0.044 0
/gate/source/xraygun/gps/histpoint 0.045 0
/gate/source/xraygun/gps/histpoint 0.046 0
/gate/source/xraygun/gps/histpoint 0.047 0
/gate/source/xraygun/gps/histpoint 0.048 0
/gate/source/xraygun/gps/histpoint 0.049 0
/gate/source/xraygun/gps/histpoint 0.050 0
/gate/source/xraygun/gps/histpoint 0.051 0
/gate/source/xraygun/gps/histpoint 0.052 0
/gate/source/xraygun/gps/histpoint 0.053 0
/gate/source/xraygun/gps/histpoint 0.054 1
/gate/source/xraygun/gps/histpoint 0.055 1
/gate/source/xraygun/gps/histpoint 0.056 1
/gate/source/xraygun/gps/histpoint 0.057 2
/gate/source/xraygun/gps/histpoint 0.058 10
/gate/source/xraygun/gps/histpoint 0.059 18
/gate/source/xraygun/gps/histpoint 0.060 4
/gate/source/xraygun/gps/histpoint 0.061 5
/gate/source/xraygun/gps/histpoint 0.062 6
/gate/source/xraygun/gps/histpoint 0.063 7
/gate/source/xraygun/gps/histpoint 0.064 8
/gate/source/xraygun/gps/histpoint 0.065 9
/gate/source/xraygun/gps/histpoint 0.066 11
/gate/source/xraygun/gps/histpoint 0.067 31
/gate/source/xraygun/gps/histpoint 0.068 20
/gate/source/xraygun/gps/histpoint 0.069 26
/gate/source/xraygun/gps/histpoint 0.070 15
/gate/source/xraygun/gps/histpoint 0.071 16
/gate/source/xraygun/gps/histpoint 0.072 18
/gate/source/xraygun/gps/histpoint 0.073 19
/gate/source/xraygun/gps/histpoint 0.074 21
/gate/source/xraygun/gps/histpoint 0.075 23
/gate/source/xraygun/gps/histpoint 0.076 25
/gate/source/xraygun/gps/histpoint 0.077 27
/gate/source/xraygun/gps/histpoint 0.078 29
/gate/source/xraygun/gps/histpoint 0.079 31
/gate/source/xraygun/gps/histpoint 0.080 33
/gate/source/xraygun/gps/histpoint 0.081 35
/gate/source/xraygun/gps/histpoint 0.082 37
/gate/source/xraygun/gps/histpoint 0.083 39
/gate/source/xraygun/gps/histpoint 0.084 40
/gate/source/xraygun/gps/histpoint 0.085 42
/gate/source/xraygun/gps/histpoint 0.086 44
/gate/source/xraygun/gps/histpoint 0.087 46
/gate/source/xraygun/gps/histpoint 0.088 48
/gate/source/xraygun/gps/histpoint 0.089 50
/gate/source/xraygun/gps/histpoint 0.090 51
/gate/source/xraygun/gps/histpoint 0.091 53
/gate/source/xraygun/gps/histpoint 0.092 55
/gate/source/xraygun/gps/histpoint 0.093 56
/gate/source/xraygun/gps/histpoint 0.094 58
/gate/source/xraygun/gps/histpoint 0.095 59
/gate/source/xraygun/gps/histpoint 0.096 60
/gate/source/xraygun/gps/histpoint 0.097 62
/gate/source/xraygun/gps/histpoint 0.098 63
/gate/source/xraygun/gps/histpoint 0.099 64
/gate/source/xraygun/gps/histpoint 0.100 65
/gate/source/xraygun/gps/histpoint 0.101 66
/gate/source/xraygun/gps/histpoint 0.102 67
/gate/source/xraygun/gps/histpoint 0.103 69
/gate/source/xraygun/gps/histpoint 0.104 69
/gate/source/xraygun/gps/histpoint 0.105 70
/gate/source/xraygun/gps/histpoint 0.106 71
/gate/source/xraygun/gps/histpoint 0.107 71
/gate/source/xraygun/gps/histpoint 0.108 72
/gate/source/xraygun/gps/histpoint 0.109 73
/gate/source/xraygun/gps/histpoint 0.110 73
/gate/source/xraygun/gps/histpoint 0.111 74
/gate/source/xraygun/gps/histpoint 0.112 74
/gate/source/xraygun/gps/histpoint 0.113 75
/gate/source/xraygun/gps/histpoint 0.114 75
/gate/source/xraygun/gps/histpoint 0.115 75
/gate/source/xraygun/gps/histpoint 0.116 76
/gate/source/xraygun/gps/histpoint 0.117 76
/gate/source/xraygun/gps/histpoint 0.118 76
/gate/source/xraygun/gps/histpoint 0.119 76
/gate/source/xraygun/gps/histpoint 0.120 77
/gate/source/xraygun/gps/histpoint 0.121 77
/gate/source/xraygun/gps/histpoint 0.122 76
/gate/source/xraygun/gps/histpoint 0.123 76
/gate/source/xraygun/gps/histpoint 0.124 77
/gate/source/xraygun/gps/histpoint 0.125 77
/gate/source/xraygun/gps/histpoint 0.126 77
/gate/source/xraygun/gps/histpoint 0.127 76
/gate/source/xraygun/gps/histpoint 0.128 76
/gate/source/xraygun/gps/histpoint 0.129 76
/gate/source/xraygun/gps/histpoint 0.130 76
/gate/source/xraygun/gps/histpoint 0.131 76
/gate/source/xraygun/gps/histpoint 0.132 76
/gate/source/xraygun/gps/histpoint 0.133 75
/gate/source/xraygun/gps/histpoint 0.134 75
/gate/source/xraygun/gps/histpoint 0.135 75
/gate/source/xraygun/gps/histpoint 0.136 75
/gate/source/xraygun/gps/histpoint 0.137 75
/gate/source/xraygun/gps/histpoint 0.138 74
/gate/source/xraygun/gps/histpoint 0.139 74
/gate/source/xraygun/gps/histpoint 0.140 74
/gate/source/xraygun/gps/histpoint 0.141 73
/gate/source/xraygun/gps/histpoint 0.142 73
/gate/source/xraygun/gps/histpoint 0.143 73
/gate/source/xraygun/gps/histpoint 0.144 72
/gate/source/xraygun/gps/histpoint 0.145 72
/gate/source/xraygun/gps/histpoint 0.146 71
/gate/source/xraygun/gps/histpoint 0.147 71
/gate/source/xraygun/gps/histpoint 0.148 70
/gate/source/xraygun/gps/histpoint 0.149 70
/gate/source/xraygun/gps/histpoint 0.150 69
/gate/source/xraygun/gps/histpoint 0.151 69
/gate/source/xraygun/gps/histpoint 0.152 68
/gate/source/xraygun/gps/histpoint 0.153 68
/gate/source/xraygun/gps/histpoint 0.154 67
/gate/source/xraygun/gps/histpoint 0.155 67
/gate/source/xraygun/gps/histpoint 0.156 66
/gate/source/xraygun/gps/histpoint 0.157 66
/gate/source/xraygun/gps/histpoint 0.158 65
/gate/source/xraygun/gps/histpoint 0.159 65
/gate/source/xraygun/gps/histpoint 0.160 64
/gate/source/xraygun/gps/histpoint 0.161 63
/gate/source/xraygun/gps/histpoint 0.162 63
/gate/source/xraygun/gps/histpoint 0.163 62
/gate/source/xraygun/gps/histpoint 0.164 62
/gate/source/xraygun/gps/histpoint 0.165 61
/gate/source/xraygun/gps/histpoint 0.166 61
/gate/source/xraygun/gps/histpoint 0.167 60
/gate/source/xraygun/gps/histpoint 0.168 59
/gate/source/xraygun/gps/histpoint 0.169 59
/gate/source/xraygun/gps/histpoint 0.170 58
/gate/source/xraygun/gps/histpoint 0.171 58
/gate/source/xraygun/gps/histpoint 0.172 57
/gate/source/xraygun/gps/histpoint 0.173 57
/gate/source/xraygun/gps/histpoint 0.174 56
/gate/source/xraygun/gps/histpoint 0.175 56
/gate/source/xraygun/gps/histpoint 0.176 55
/gate/source/xraygun/gps/histpoint 0.177 54
/gate/source/xraygun/gps/histpoint 0.178 54
/gate/source/xraygun/gps/histpoint 0.179 53
/gate/source/xraygun/gps/histpoint 0.180 53
/gate/source/xraygun/gps/histpoint 0.181 52
/gate/source/xraygun/gps/histpoint 0.182 52
/gate/source/xraygun/gps/histpoint 0.183 51
/gate/source/xraygun/gps/histpoint 0.184 50
/gate/source/xraygun/gps/histpoint 0.185 50
/gate/source/xraygun/gps/histpoint 0.186 49
/gate/source/xraygun/gps/histpoint 0.187 49
/gate/source/xraygun/gps/histpoint 0.188 48
/gate/source/xraygun/gps/histpoint 0.189 48
/gate/source/xraygun/gps/histpoint 0.190 47
/gate/source/xraygun/gps/histpoint 0.191 47
/gate/source/xraygun/gps/histpoint 0.192 46
/gate/source/xraygun/gps/histpoint 0.193 46
/gate/source/xraygun/gps/histpoint 0.194 45
/gate/source/xraygun/gps/histpoint 0.195 45
/gate/source/xraygun/gps/histpoint 0.196 44
/gate/source/xraygun/gps/histpoint 0.197 43
/gate/source/xraygun/gps/histpoint 0.198 43
/gate/source/xraygun/gps/histpoint 0.199 42
/gate/source/xraygun/gps/histpoint 0.200 42
/gate/source/xraygun/gps/histpoint 0.201 41
/gate/source/xraygun/gps/histpoint 0.202 41
/gate/source/xraygun/gps/histpoint 0.203 40
/gate/source/xraygun/gps/histpoint 0.204 40
/gate/source/xraygun/gps/histpoint 0.205 39
/gate/source/xraygun/gps/histpoint 0.206 39
/gate/source/xraygun/gps/histpoint 0.207 38
/gate/source/xraygun/gps/histpoint 0.208 38
/gate/source/xraygun/gps/histpoint 0.209 37
/gate/source/xraygun/gps/histpoint 0.210 37
/gate/source/xraygun/gps/histpoint 0.211 36
/gate/source/xraygun/gps/histpoint 0.212 36
/gate/source/xraygun/gps/histpoint 0.213 35
/gate/source/xraygun/gps/histpoint 0.214 35
/gate/source/xraygun/gps/histpoint 0.215 34
/gate/source/xraygun/gps/histpoint 0.216 34
/gate/source/xraygun/gps/histpoint 0.217 33
/gate/source/xraygun/gps/histpoint 0.218 33
/gate/source/xraygun/gps/histpoint 0.219 32
/gate/source/xraygun/gps/histpoint 0.220 32
/gate/source/xraygun/gps/histpoint 0.221 31
/gate/source/xraygun/gps/histpoint 0.222 31
/gate/source/xraygun/gps/histpoint 0.223 31
/gate/source/xraygun/gps/histpoint 0.224 30
/gate/source/xraygun/gps/histpoint 0.225 30
/gate/source/xraygun/gps/histpoint 0.226 29
/gate/source/xraygun/gps/histpoint 0.227 29
/gate/source/xraygun/gps/histpoint 0.228 28
/gate/source/xraygun/gps/histpoint 0.229 28
/gate/source/xraygun/gps/histpoint 0.230 27
/gate/source/xraygun/gps/histpoint 0.231 27
/gate/source/xraygun/gps/histpoint 0.232 27
/gate/source/xraygun/gps/histpoint 0.233 26
/gate/source/xraygun/gps/histpoint 0.234 26
/gate/source/xraygun/gps/histpoint 0.235 25
/gate/source/xraygun/gps/histpoint 0.236 25
/gate/source/xraygun/gps/histpoint 0.237 24
/gate/source/xraygun/gps/histpoint 0.238 24
/gate/source/xraygun/gps/histpoint 0.239 24
/gate/source/xraygun/gps/histpoint 0.240 23
/gate/source/xraygun/gps/histpoint 0.241 23
/gate/source/xraygun/gps/histpoint 0.242 22
/gate/source/xraygun/gps/histpoint 0.243 22
/gate/source/xraygun/gps/histpoint 0.244 22
/gate/source/xraygun/gps/histpoint 0.245 21
/gate/source/xraygun/gps/histpoint 0.246 21
/gate/source/xraygun/gps/histpoint 0.247 20
/gate/source/xraygun/gps/histpoint 0.248 20
/gate/source/xraygun/gps/histpoint 0.249 20
/gate/source/xraygun/gps/histpoint 0.250 19
/gate/source/xraygun/gps/histpoint 0.251 19
/gate/source/xraygun/gps/histpoint 0.252 19
/gate/source/xraygun/gps/histpoint 0.253 18
/gate/source/xraygun/gps/histpoint 0.254 18
/gate/source/xraygun/gps/histpoint 0.255 17
/gate/source/xraygun/gps/histpoint 0.256 17
/gate/source/xraygun/gps/histpoint 0.257 17
/gate/source/xraygun/gps/histpoint 0.258 16
/gate/source/xraygun/gps/histpoint 0.259 16
/gate/source/xraygun/gps/histpoint 0.260 16
/gate/source/xraygun/gps/histpoint 0.261 15
/gate/source/xraygun/gps/histpoint 0.262 15
/gate/source/xraygun/gps/histpoint 0.263 14
/gate/source/xraygun/gps/histpoint 0.264 14
/gate/source/xraygun/gps/histpoint 0.265 14
/gate/source/xraygun/gps/histpoint 0.266 13
/gate/source/xraygun/gps/histpoint 0.267 13
/gate/source/xraygun/gps/histpoint 0.268 13
/gate/source/xraygun/gps/histpoint 0.269 12
/gate/source/xraygun/gps/histpoint 0.270 12
/gate/source/xraygun/gps/histpoint 0.271 12
/gate/source/xraygun/gps/histpoint 0.272 11
/gate/source/xraygun/gps/histpoint 0.273 11
/gate/source/xraygun/gps/histpoint 0.274 11
/gate/source/xraygun/gps/histpoint 0.275 10
/gate/source/xraygun/gps/histpoint 0.276 10
/gate/source/xraygun/gps/histpoint 0.277 9
/gate/source/xraygun/gps/histpoint 0.278 9
/gate/source/xraygun/gps/histpoint 0.279 9
/gate/source/xraygun/gps/histpoint 0.280 8
/gate/source/xraygun/gps/histpoint 0.281 8
/gate/source/xraygun/gps/histpoint 0.282 8
/gate/source/xraygun/gps/histpoint 0.283 7
/gate/source/xraygun/gps/histpoint 0.284 7
/gate/source/xraygun/gps/histpoint 0.285 7
/gate/source/xraygun/gps/histpoint 0.286 6
/gate/source/xraygun/gps/histpoint 0.287 6
/gate/source/xraygun/gps/histpoint 0.288 6
/gate/source/xraygun/gps/histpoint 0.289 5
/gate/source/xraygun/gps/histpoint 0.290 5
/gate/source/xraygun/gps/histpoint 0.291 4
/gate/source/xraygun/gps/histpoint 0.292 4
/gate/source/xraygun/gps/histpoint 0.293 3
/gate/source/xraygun/gps/histpoint 0.294 3
/gate/source/xraygun/gps/histpoint 0.295 3
/gate/source/xraygun/gps/histpoint 0.296 2
/gate/source/xraygun/gps/histpoint 0.297 2
/gate/source/xraygun/gps/histpoint 0.298 1
/gate/source/xraygun/gps/histpoint 0.299 0
 /gate/source/xraygun/gps/arbint Lin
/gate/source/xraygun/gps/type Plane
/gate/source/xraygun/gps/shape Rectangle
/gate/source/xraygun/gps/halfx 5. um
/gate/source/xraygun/gps/halfy 5. um
/gate/source/xraygun/gps/mintheta 0  deg
/gate/source/xraygun/gps/maxtheta  10.0 deg
/gate/source/xraygun/gps/centre 0.0 0.0 -200.0 mm
/gate/source/xraygun/gps/angtype iso
/gate/source/list
